PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1600,900]
  expName = MainFlow
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine image
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    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = C:/Users/PH/Downloads/480689294_23872609285659295_1172895884626913474_n.jpg
      pos = (0.3, 0.3)
      size = (0.5,None)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine tutorial
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    TextComponent text_norm
      font = Noto Sans
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Pilot mode

        In this experiment, an image will be shown for a certain period of time followed by 2 words at the left and right of the screen in which subject will choose whether the left or right word are an acutal word

        press spacebar to show an example
    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine value_test
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  Routine blank1sec
    RoutineSettingsComponent blank1sec
      stopVal [duration (s)] = 1
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  Routine blank2sec
    RoutineSettingsComponent blank2sec
      stopVal [duration (s)] = 2
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  Routine ending
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    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        End of the experiment

        press spacebar to exit
    KeyboardComponent ending_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo_img
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    ImageComponent image_3
      image = demo/tutorimg.png
      pos = (0, 0.3)
      size = (None, 1)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_4
      letterHeight = 0.07
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        As explained before, the image will be shown for a certain period of time, then, two words will appear. Click on the word that best explain the image

        press spacebar to start the experiment
  Routine imgshow
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    ImageComponent image_2
      image [set every repeat] = $image_dir
      size = (0.7,None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = norm
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  Routine wordselect
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        import random
        MCQ = [correct_dir, greek_dir, scramble_dir, pseudo_dir]
        leftword = random.choice(MCQ)
        if leftword == correct_dir:
            rightword = random.choice([greek_dir, scramble_dir, pseudo_dir])
        else:
            rightword = correct_dir
    ImageComponent image_left
      image [set every repeat] = $leftword
      pos = (-0.5, -0.3)
      saveStartStop = False
      size = (0.4, None)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_right
      image [set every repeat] = $rightword
      pos = (0.5, -0.3)
      saveStartStop = False
      size = (0.4, None)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent click_event
      clickable = image_left, image_right
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable = image
      startVal [time (s)] = 0.0
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    TextComponent text_2
      font = Noto sans
      letterHeight = 0.1
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which word describe previous image the best?
      units = norm
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Flow
  Routine tutorial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = imageid.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'id': 1.0, 'image_dir': 'image/img001.png', 'correct_dir': 'text/word0011.png', 'greek_dir': 'text/word0012.png', 'scramble_dir': 'text/word0013.png', 'pseudo_dir': 'text/word0014.png'},
      {'id': 2.0, 'image_dir': 'image/img002.png', 'correct_dir': 'text/word0021.png', 'greek_dir': 'text/word0022.png', 'scramble_dir': 'text/word0023.png', 'pseudo_dir': 'text/word0024.png'},
      {'id': 3.0, 'image_dir': 'image/img003.png', 'correct_dir': 'text/word0031.png', 'greek_dir': 'text/word0032.png', 'scramble_dir': 'text/word0033.png', 'pseudo_dir': 'text/word0034.png'},
      {'id': 4.0, 'image_dir': 'image/img004.png', 'correct_dir': 'text/word0041.png', 'greek_dir': 'text/word0042.png', 'scramble_dir': 'text/word0043.png', 'pseudo_dir': 'text/word0044.png'},
      {'id': 5.0, 'image_dir': 'image/img005.png', 'correct_dir': 'text/word0051.png', 'greek_dir': 'text/word0052.png', 'scramble_dir': 'text/word0053.png', 'pseudo_dir': 'text/word0054.png'},
      {'id': 6.0, 'image_dir': 'image/img006.png', 'correct_dir': 'text/word0061.png', 'greek_dir': 'text/word0062.png', 'scramble_dir': 'text/word0063.png', 'pseudo_dir': 'text/word0064.png'},
      {'id': 7.0, 'image_dir': 'image/img007.png', 'correct_dir': 'text/word0071.png', 'greek_dir': 'text/word0072.png', 'scramble_dir': 'text/word0073.png', 'pseudo_dir': 'text/word0074.png'},
      {'id': 8.0, 'image_dir': 'image/img008.png', 'correct_dir': 'text/word0081.png', 'greek_dir': 'text/word0082.png', 'scramble_dir': 'text/word0083.png', 'pseudo_dir': 'text/word0084.png'}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
    Routine blank1sec
    Routine imgshow
    Routine blank2sec
    Routine wordselect
  LoopTerminator trials
  Routine ending
