PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  backgroundFit = contain
  expName = MainFlow
  frameRateMsg = Measuring...............frame.................rate
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine tutorial
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    TextComponent text_norm
      font = Noto Sans
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        *For the observer

        In this experiment, a word will be shown for a second, then, an image will be shown. Participant have to choose whether this image represent the word or not by pressing `z` if yes, 'x' if no

        press spacebar to start a trial
    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine blank1sec
    RoutineSettingsComponent blank1sec
      saveStartStop = False
      stopVal [duration (s)] = 1
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  Routine ending
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    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        End of the experiment

        press spacebar to exit
    KeyboardComponent ending_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine letterselect
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    ImageComponent imageword
      image [set every repeat] = $imgdir
      pos = (-0.5, 0)
      saveStartStop = False
      size = (None,1)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_2
      font = Noto sans
      letterHeight = 0.07
      pos = (-0.5, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = image == word? press `z` if yes, `x` if no
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'z','x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wordshow
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    ImageComponent image
      image [set every repeat] = $worddir
      pos = (-0.5, 0)
      size = (1, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine tutorial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = fullwordorder.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'lang': 2, 'wordid': 8, 'truestate': 1, 'worddir': 'word/worden0081.png', 'imgdir': 'image/True/img08.png'},
      {'lang': 2, 'wordid': 51, 'truestate': 0, 'worddir': 'word/worden0511.png', 'imgdir': 'image/False/mgf51.png'},
      {'lang': 1, 'wordid': 23, 'truestate': 0, 'worddir': 'word/wordth0231.png', 'imgdir': 'image/False/mgf23.png'},
      {'lang': 2, 'wordid': 79, 'truestate': 0, 'worddir': 'word/worden0791.png', 'imgdir': 'image/False/mgf79.png'},
      {'lang': 2, 'wordid': 6, 'truestate': 1, 'worddir': 'word/worden0061.png', 'imgdir': 'image/True/img06.png'},
      {'lang': 1, 'wordid': 66, 'truestate': 0, 'worddir': 'word/wordth0661.png', 'imgdir': 'image/False/mgf66.png'},
      {'lang': 2, 'wordid': 42, 'truestate': 0, 'worddir': 'word/worden0421.png', 'imgdir': 'image/False/mgf42.png'},
      {'lang': 1, 'wordid': 52, 'truestate': 1, 'worddir': 'word/wordth0521.png', 'imgdir': 'image/True/img52.png'},
      {'lang': 2, 'wordid': 78, 'truestate': 1, 'worddir': 'word/worden0781.png', 'imgdir': 'image/True/img78.png'},
      {'lang': 2, 'wordid': 8, 'truestate': 0, 'worddir': 'word/worden0081.png', 'imgdir': 'image/False/mgf08.png'},
      {'lang': 1, 'wordid': 93, 'truestate': 0, 'worddir': 'word/wordth0931.png', 'imgdir': 'image/False/mgf93.png'},
      {'lang': 2, 'wordid': 96, 'truestate': 1, 'worddir': 'word/worden0961.png', 'imgdir': 'image/True/img96.png'},
      {'lang': 1, 'wordid': 24, 'truestate': 0, 'worddir': 'word/wordth0241.png', 'imgdir': 'image/False/mgf24.png'}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
    Routine blank1sec
    Routine wordshow
    Routine blank1sec
    Routine letterselect
  LoopTerminator trials
  Routine ending
